PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = annotation
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent caption_target
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $caption
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    TextComponent space
      disabled = True
      letterHeight = 0.03
      pos = (0, -0.46)
      startVal [time (s)] = 0.0
      text = Press ‘space’ to go on
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    ImageComponent image_0
      image [set every repeat] = $img1
      pos = (-0.5, 0.15)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent image_1
      image [set every repeat] = $img2
      pos = (-0.25, 0.15)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image [set every repeat] = $img3
      pos = (0,  0.15)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent image_3
      image [set every repeat] = $img4
      pos = (0.25,  0.15)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent image_4
      image [set every repeat] = $img5
      pos = (0.5,  0.15)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent image_5
      image [set every repeat] = $img6
      pos = (-0.5, -0.15)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent image_6
      image [set every repeat] = $img7
      pos = (-0.25, -0.15)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent image_7
      image [set every repeat] = $img8
      pos = (0, -0.15)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent image_8
      image [set every repeat] = $img9
      pos = (0.25, -0.15)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent image_9
      image [set every repeat] = $img10
      pos = (0.5, -0.15)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox
      bold = False
      borderColor = white
      disabled = True
      editable = True
      letterHeight = 0.04
      pos = (0, -0.37)
      size = (0.1, 0.08)
      startVal [time (s)] = 0.5
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    CodeComponent code
      Code Type = Both
      disabled = True
      Begin Experiment:
        allLetters = ["q", "w", "e", "r", "t", "y", "u", "i", "o", "p", "a", "s", "d", "f", "g", "h", "j", "k", "l", "z", "x", "c", "v", "b", "n", "m"];
      Begin JS Experiment:
        allLetters = ["l", "r", "t", "y", "u", "o", "p","s"];
      Begin JS Routine:
        textbox.refresh();

        modify = false;
        textFill = "";


        textClick = 0;
      Begin Routine:
        #textbox.refresh()


        textFill = ''
      Each Frame:
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill += ' '  # Adds a space instead of 'space'
                elif keys[0] == 'backspace':
                    textFill = textFill[:-1]  # Deletes
                elif keys[0] == 'minus':
                    textFill += '-'
                elif keys[0] in allLetters:
                    textFill+=keys[0]  # Adds character to text if in alphabet.
                elif "lshift" in keys or "rshift" in keys:
                    mod
                textbox.setText(textFill)  # Set new text on screen
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);

        keys = psychoJS.eventManager.getKeys();
        if (keys.length) {
            if (_pj.in_es6("escape", keys)) {
                core.quit();
            } else {
                if (keys) {
                    if ((keys[0] === "space")) {
                        textFill += "";
                    } else {
                        if ((keys[0] === "backspace")) {
                            textFill = textFill.slice(0, (- 1));
                        } else {
                            if ((_pj.in_es6(keys[0], allLetters))) {
                                textFill += "";
                            } else {
                                if ((_pj.in_es6("lshift", keys) || _pj.in_es6("rshift", keys))) {
                                    modify = true;
                                } else {
                                    if ((modify === false)) {
                                        textFill += keys[0];
                                    }
                                }
                            }
                        }
                    }
                }
                textbox.setText(textFill);
            }
        }



        _pj = {};
        _pj_snippets(_pj);
        if ((((keys.length && modify) && (! _pj.in_es6("rshift", keys))) && (! _pj.in_es6("lshift", keys)))) {
            textFill += keys[0].toUpperCase();
            modify = false;
        }



        if (((keys.length) && (textClick === 0))) {
            sliderClick = t;
        } else {
            if ((sliderClick === 0)) {
            } else {
                if ((t > (textClick + 5)) && textFill.length >= 1) {
                    continueRoutine = false;
                }
            }
        }
      End JS Routine:
        psychoJS.experiment.addData("subjResponse", textFill);
      End Routine:
        thisExp.addData('subjResponse', textFill)
    SliderComponent slider
      disabled = True
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    MouseComponent mouse
      clickable = image_0, image_1, image_2, image_3, image_4, image_5, image_6, image_7, image_8, image_9
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.5
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  Routine Instructions1
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        In this study, we ask you to identify a target image in a set of 10 images, based on a description.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_space
      letterHeight = 0.03
      pos = (0, -0.46)
      startVal [time (s)] = 0.0
      text = Press ‘space’ to go on
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  Routine Instructions2
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will always see 10 images. Above them, there will be a description of the target.

        We ask you to click on the target image.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_space2
      letterHeight = 0.03
      pos = (0, -0.46)
      startVal [time (s)] = 0.0
      text = Press ‘space’ to go on
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  Routine Example
    TextComponent text_example
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        For example, in this case, the target is the fourth image in the first row. You have to click on it.

        “The purple jelly fish”
    TextComponent text_space3
      disabled = True
      letterHeight = 0.03
      pos = (0, -0.46)
      startVal [time (s)] = 0.0
      text = Press ‘space’ to go on
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    ImageComponent ex2
      image = Example/img1.jpg
      pos = (-0.25, 0.1)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent ex3
      image = Example/img2.jpg
      pos = (0, 0.1)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent ex4
      image = Example/img3.jpg
      pos = (0.25, 0.1)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent ex5
      image = Example/img4.jpg
      pos = (0.5, 0.1)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent ex6
      image = Example/img5.jpg
      pos = (-0.5, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent ex7
      image = Example/img6.jpg
      pos = (-0.25, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent ex8
      image = Example/img7.jpg
      pos = (0, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent ex9
      image = Example/img8.jpg
      pos = (0.25, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent ex10
      image = Example/img9.jpg
      pos = (0.5, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_2
      clickable = ex4
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent ex1
      image = Example/img0.jpg
      pos = (-0.5, 0.1)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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  Routine Warning
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Some cases can be harder than others, or without a clear answer.

        Don't worry.

        Reply with what you think is the most plausible answer.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_space4
      letterHeight = 0.03
      pos = (0, -0.46)
      startVal [time (s)] = 0.0
      text = Press ‘space’ to go on
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  Routine Start
    TextComponent start
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text = Let's start!
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_space5
      letterHeight = 0.03
      pos = (0, -0.46)
      startVal [time (s)] = 0.0
      text = Press ‘space’ to go on
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  Routine Code
    TextComponent instructions_code
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Thank your for completing our study!

        Below you see your personal verification code.

        Please write it down now and enter it into the field "verification code" in the Amazon Mechanical Turk portal for our study (where you found the link to start the study).

        Please note that we can only verify that you completed the study if you enter this code there. If you do not enter this code, we will not be able to compensate you for your participation.

        After you have written down your code you can finish the study by pressing ‘space’.

        Thank you again!
    CodeComponent code_2
      Code Type = JS
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      Begin JS Experiment:
        function getRandomInt(min, max) {
          min = Math.ceil(min);
          max = Math.floor(max);
          return Math.floor(Math.random() * (max - min)) + min; //The maximum is exclusive and the minimum is inclusive
        }

        mturk = getRandomInt(1000000, 9999999)

        psychoJS.experiment.addData("mturk", mturk)
    TextComponent text_space6
      letterHeight = 0.03
      pos = (0, -0.46)
      startVal [time (s)] = 0.0
      text = Press ‘space’ to go on
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    TextComponent text_x_code
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = $mturk
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine payment
    TextComponent payment_warn
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please, note that the task contains some items which we use to check the quality of your responses.

        If these items indicate that responses were given randomly or without paying attention to the task, we will reject the submitted assignment.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_space7
      letterHeight = 0.03
      pos = (0, -0.46)
      startVal [time (s)] = 0.0
      text = Press ‘space’ to go on
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Flow
  Routine Instructions1
  Routine Instructions2
  Routine Example
  Routine Warning
  Routine payment
  Routine Start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = data_psy.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('caption', 'the transition image into the one of the lady in blue from the one where bags where hang up'), ('class_caption', 'H'), ('model_guessed', 0.0), ('target_idx', 7), ('image_set', 'MSR-VTT-videoTestVideo_video7047-shot1_0'), ('img1', 'Images/MSR-VTT-videoTestVideo_video7047-shot1_0/img0.jpg'), ('img2', 'Images/MSR-VTT-videoTestVideo_video7047-shot1_0/img1.jpg'), ('img3', 'Images/MSR-VTT-videoTestVideo_video7047-shot1_0/img27.jpg'), ('img4', 'Images/MSR-VTT-videoTestVideo_video7047-shot1_0/img32.jpg'), ('img5', 'Images/MSR-VTT-videoTestVideo_video7047-shot1_0/img33.jpg'),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,
      OrderedDict([('caption', "Horse is on left side facing the right and looking straight ahead. Can only see the man's legs behind the horse while upper body is obstructed"), ('class_caption', 'H'), ('model_guessed', 0.0), ('target_idx', 7), ('image_set', 'MSR-VTT-videoTestVideo_video9858-shot1_1'), ('img1', 'Images/MSR-VTT-videoTestVideo_video9858-shot1_1/img204.jpg'), ('img2', 'Images/MSR-VTT-videoTestVideo_video9858-shot1_1/img216.jpg'), ('img3', 'Images/MSR-VTT-videoTestVideo_video9858-shot1_1/img239.jpg'), ('img4', 'Images/MSR-VTT-videoTestVideo_video9858-shot1_1/img248.jpg'), ('img5', 'Imag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,
      OrderedDict([('caption', "A bald man's head covers a  lot of the crowd and signs in the background."), ('class_caption', 'H'), ('model_guessed', 0.0), ('target_idx', 4), ('image_set', 'MSR-VTT-videoTestVideo_video7522-shot8_0'), ('img1', 'Images/MSR-VTT-videoTestVideo_video7522-shot8_0/img0.jpg'), ('img2', 'Images/MSR-VTT-videoTestVideo_video7522-shot8_0/img1.jpg'), ('img3', 'Images/MSR-VTT-videoTestVideo_video7522-shot8_0/img2.jpg'), ('img4', 'Images/MSR-VTT-videoTestVideo_video7522-shot8_0/img3.jpg'), ('img5', 'Images/MSR-VTT-videoTestVideo_video7522-shot8_0/img4.jpg'), ('img6', 'Images/MSR-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,
      OrderedDict([('caption', 'The white substance has not been poured yet and the index finger is prominent.'), ('class_caption', 'H'), ('model_guessed', 0.0), ('target_idx', 1), ('image_set', 'YouCook-video0036-shot0_0'), ('img1', 'Images/YouCook-video0036-shot0_0/img0.jpg'), ('img2', 'Images/YouCook-video0036-shot0_0/img21.jpg'), ('img3', 'Images/YouCook-video0036-shot0_0/img49.jpg'), ('img4', 'Images/YouCook-video0036-shot0_0/img111.jpg'), ('img5', 'Images/YouCook-video0036-shot0_0/img116.jpg'), ('img6', 'Images/YouCook-video0036-shot0_0/img220.jpg'), ('img7', 'Images/YouCook-video0036-shot0_0/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
    Routine trial
  LoopTerminator trials
  Routine Code
